#  Yaniv_Setup3 based on Yaniv_Setup2.cfg to include magnet stage
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray', 'tasklogic']

    serveraddress: localhost
    serverport: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:


    Hardware_NI_Card:
        module.Class: 'ni_card.NICard'

        #Source
        photon_source: '/Dev1/PFI8'
        gate_in_channel: '/Dev1/PFI0'
        counting_edge_rising: 1                     # 1-rising, 0-falling

        #Counter
        clock_frequency: 100
        clock_channel: '/Dev1/Ctr0'
        counter_channel: '/Dev1/Ctr1'

        #Scanner
        scanner_clock_frequency: 100
        scanner_clock_channel: '/Dev1/Ctr2'
        scanner_counter_channel: '/Dev1/Ctr3'
        scanner_x_ao: '/Dev1/ao0'
        scanner_y_ao: '/Dev1/ao1'
        scanner_z_ao: '/Dev1/ao2'
        x_range: [0,200e-6]
        y_range: [0,200e-6]
        z_range: [0,25e-6]
        voltage_range: [-10,10]                    # [volts]

        #ODMR
        odmr_trigger_channel: '/Dev1/PFI15'

        #Gated Counting
        samples_number: 50

        motordummy:
             module.Class: 'motor.motor_dummy.MotorDummy'

        magnet:
             module.Class: 'magnet.magnet_dummy.MagnetDummy'

logic:


    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    counterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'Hardware_NI_Card'
            savelogic: 'savelogic'



    gatedcounter:
        module.Class: 'gated_counter_logic.GatedCounterLogic'
        connect:
            counter1: 'Hardware_NI_Card'
            savelogic: 'savelogic'


    scannerlogic:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'scanner_tilt_interfuse'
            savelogic: 'savelogic'

    scanner_tilt_interfuse:
        module.Class: 'interfuse.scanner_tilt_interfuse.ScannerTiltInterfuse'
        connect:
            confocalscanner1: 'Hardware_NI_Card'

    optimizerlogic:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'scanner_tilt_interfuse'
            fitlogic: 'fitlogic'

    poimanagerlogic:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scannerlogic'
            optimizer1: 'optimizerlogic'
            savelogic: 'savelogic'

    odmrlogic:
        module.Class: 'odmr_logic.ODMRLogic'
        connect:
            odmrcounter: 'mydummyodmrcounter'
            fitlogic: 'fitlogic'
            microwave1: 'mykrowave'
            savelogic: 'savelogic'
            taskrunner: 'tasklogic'

    fitlogic:
        module.Class: 'fit_logic.FitLogic'

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
        scannerLocationRefocus:
                module: 'refocus'
                pausetasks: ['scan', 'odmr']
                needsmodules:
                    optimizer: 'optimizerlogic'


    automationlogic:
        module.Class: 'automation.AutomationLogic'
        connect:
            taskrunner: 'tasklogic'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'
        log_into_daily_directory: True

    trace_analysis_logic:
        module.Class: 'trace_analysis_logic.TraceAnalysisLogic'
        connect:
            counterlogic1: 'gatedcounterlogic'
            savelogic: 'savelogic'
            fitlogic: 'fitlogic'

    qdplotlogic:
        module.Class: 'qdplot_logic.QdplotLogic'
        connect:
            savelogic: 'savelogic'

    magnet_logic:
        module.Class: 'magnet_logic.MagnetLogic'
        connect:
            magnetstage: 'magnet'
            optimizerlogic: 'optimizerlogic'
            counterlogic: 'counterlogic'
            odmrlogic: 'odmrlogic'
            savelogic: 'savelogic'
            scannerlogic: 'scannerlogic'



gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    counter:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counterlogic'

    confocal:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scannerlogic'
            savelogic: 'savelogic'
            optimizerlogic1: 'optimizerlogic'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02

    gatedcountergui:
        module.Class: 'gated_counter.gated_counter_gui.GatedCounterGui'
        connect:
            gatedcounterlogic1: 'gatedcounter'